# Generated by OpenSesame 2.9.0~pre24 (Hesitant Heisenberg)
# Wed Oct 15 23:09:00 2014 (nt)
# <http://www.cogsci.nl/opensesame>

set mouse_backend "xpyriment"
set subject_parity "even"
set height "768"
set font_italic "no"
set canvas_backend "xpyriment"
set synth_backend "legacy"
set start "experiment"
set title "Tutorial: Gaze cuing"
set coordinates "relative"
set width "1024"
set sampler_backend "legacy"
set transparent_variables "no"
set foreground "white"
set font_bold "no"
set description "Default description"
set background "black"
set font_size "18"
set keyboard_backend "legacy"
set font_family "mono"
set compensation "0"
set bidi "no"
set subject_nr "0"

define sequence __sequence

define sequence _sequence

define loop block_loop
	set repeat "1"
	set item "trial_sequence"
	set break_if "never"
	set column_order "target_pos;gaze_cue;target_letter;dist_pos;correct_response"
	set cycles "8"
	set order "random"
	setcycle 0 dist_pos "300"
	setcycle 0 correct_response "z"
	setcycle 0 target_pos "-300"
	setcycle 0 gaze_cue "left"
	setcycle 0 target_letter "F"
	setcycle 1 dist_pos "300"
	setcycle 1 correct_response "m"
	setcycle 1 target_pos "-300"
	setcycle 1 gaze_cue "left"
	setcycle 1 target_letter "H"
	setcycle 2 dist_pos "300"
	setcycle 2 correct_response "z"
	setcycle 2 target_pos "-300"
	setcycle 2 gaze_cue "right"
	setcycle 2 target_letter "F"
	setcycle 3 dist_pos "300"
	setcycle 3 correct_response "m"
	setcycle 3 target_pos "-300"
	setcycle 3 gaze_cue "right"
	setcycle 3 target_letter "H"
	setcycle 4 dist_pos "-300"
	setcycle 4 correct_response "z"
	setcycle 4 target_pos "300"
	setcycle 4 gaze_cue "left"
	setcycle 4 target_letter "F"
	setcycle 5 dist_pos "-300"
	setcycle 5 correct_response "m"
	setcycle 5 target_pos "300"
	setcycle 5 gaze_cue "left"
	setcycle 5 target_letter "H"
	setcycle 6 dist_pos "-300"
	setcycle 6 correct_response "z"
	setcycle 6 target_pos "300"
	setcycle 6 gaze_cue "right"
	setcycle 6 target_letter "F"
	setcycle 7 dist_pos "-300"
	setcycle 7 correct_response "m"
	setcycle 7 target_pos "300"
	setcycle 7 gaze_cue "right"
	setcycle 7 target_letter "H"
	run trial_sequence

define sequence block_sequence
	run reset_feedback "always"
	run block_loop "always"
	run feedback "always"

define form_text_display end_of_experiment
	set rows "1;4;1"
	set form_title "<span size=24>Title</span>"
	set cols "1;1;1"
	set form_text "Your message"
	set ok_text "Ok"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center="no" text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display end_of_practice
	set rows "1;4;1"
	set form_title "<span size=24>Title</span>"
	set cols "1;1;1"
	set form_text "Your message"
	set ok_text "Ok"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center="no" text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	run instructions "always"
	run practice_loop "always"
	run end_of_practice "always"
	run experimental_loop "always"
	run end_of_experiment "always"

define loop experimental_loop
	set repeat "1"
	set item "sequence"
	set break_if "never"
	set column_order ""
	set cycles "1"
	set order "random"
	run block_sequence

define feedback feedback

define form_text_display instructions
	set rows "1;4;1"
	set form_title "<span size=24>Title</span>"
	set cols "1;1;1"
	set form_text "Your message"
	set ok_text "Ok"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center="no" text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop practice_loop
	set cycles "1"
	set column_order ""
	run block_sequence

define reset_feedback reset_feedback

define sequence trial_sequence

